<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" Category="Session Settings" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:LoadSettings">
          <p1:Path>C:\Users\neurogears\source\repos\vestibular-vr\src\sessionTemplate.yml</p1:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Blocks.Count</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Blocks</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Trials</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Reward.AmountHigh</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>StartVisualEnvironment</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>StartRunningLoop</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>ChooseHalt</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>WaitAndCheckRunning</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>StillRunning</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>ApplyHalt</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Restart</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>NotRunning</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Restart</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Blocks</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Trials</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>DoTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Trial</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT1S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ExtentX>360</ExtentX>
              <ExtentY>180</ExtentY>
              <SpatialFrequency>2</SpatialFrequency>
              <TemporalFrequency>0</TemporalFrequency>
              <Phase>0</Phase>
              <Angle>0</Angle>
              <SquareWave>false</SquareWave>
              <Contrast>1</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>1</Radius>
              <Aperture>1</Aperture>
              <Opacity>1</Opacity>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HaltProtocol.HaltTime</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="11" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>DrawCall</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="wie:KeyDown">
            <wie:Filter>A</wie:Filter>
            <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:SubscribeWhen" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="wie:KeyDown">
            <wie:Filter>S</wie:Filter>
            <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:TakeUntil" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
          <LocationX>0</LocationX>
          <LocationY>0</LocationY>
          <Layer>0</Layer>
          <ExtentX>360</ExtentX>
          <ExtentY>180</ExtentY>
          <SpatialFrequency>2</SpatialFrequency>
          <TemporalFrequency>0</TemporalFrequency>
          <Phase>0</Phase>
          <Angle>0</Angle>
          <SquareWave>false</SquareWave>
          <Contrast>1</Contrast>
          <DutyCycle xsi:nil="true" />
          <Radius>1</Radius>
          <Aperture>1</Aperture>
          <Opacity>1</Opacity>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Repeat" />
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="18" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="35" Label="Source1" />
      <Edge From="34" To="35" Label="Source2" />
      <Edge From="35" To="37" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>